//=================================================================
//                  Load cells templates			  //		
//=================================================================

load_file("Bip.tem")
load_file("A2.tem")
load_file("Ganglion.tem")
				
objref rod_bip[nrodbipx][nrodbipy]
objref A2_cell[na2x][na2y],GAN[nganx][ngany], cone_bip[nconebipx][nconebipy]
objref brightcurr[nrodbipx][nrodbipy],dimcurr[nrodbipx][nrodbipy],input_cone[nconebipx][nconebipy],random
random = new Random(seed)

//=================================================================
//                      Create cells				  //		
//=================================================================
print "Creating cells. This may take some time."

// Create Rod bipolar cell
  for i = 0, nrodbipx-1 {
    for j = 0, nrodbipy-1 {
      rod_bip[i][j] = new Bip()
    }
  }

// Create Cone bipolar cell
  for i = 0, nconebipx-1 {
    for j = 0, nconebipy-1 {
      cone_bip[i][j] = new Bip()
      cone_bip[i][j].soma.gkabar_IA(0.5) = 0   // USUI et al.
    }
  }

// Create A2
  for i = 0, na2x-1 {
    for j = 0, na2y-1 {
      A2_cell[i][j] = new A2()
    }
  }


// Create Ganglion
  for i = 0, nganx-1 {
    for j = 0, ngany-1 {
      GAN[i][j] = new Ganglion()
    }
  }

//=================================================================
//                      Add input currents		       	  //		
//=================================================================

proc insert_iclamps() { local k,m,ii,jj   // 1 arg - amp 

  zspacing = 37 //um
  RBPspacing = 3.54 //um
  CBPspacing = RBPspacing*2
  xelect = 2 //middle
  yelect = 2
  sigma_e = 2*10^-7 //1/ohm-um

  rm = 24000*10^8 / (2*3.141*5^2+3.141*10*10) // ohms

  for k = 0, nrodbipx-1 {
    for m = 0, nrodbipy-1 {
      rod_bip[k][m].soma brightcurr[k][m] = new IinjLT(0.5)
      brightcurr[k][m].del = stim_init
      brightcurr[k][m].ton = 1500   //6000
      voltage = $1/(4*3.141*sigma_e*sqrt((zspacing)^2+((xelect-k-0.5)*RBPspacing)^2+((yelect-m-0.5)*RBPspacing)^2))
      printf("%f Volt/rm\n", (voltage/rm)*10^9)
      brightcurr[k][m].amp = (voltage / rm) *10^9    
      
      rod_bip[k][m].soma dimcurr[k][m] = new IinjLTDim(0.5)
      dimcurr[k][m].del = stim_init
      dimcurr[k][m].ton = 1500      //6000
      dimcurr[k][m].ssI=0
      dimcurr[k][m].amp =0 
	}
   }
   
  for k = 0, nconebipx-1 {   // Dark current in cones
    for m = 0, nconebipy-1 {
      cone_bip[k][m].soma input_cone[k][m] = new IinjLT(0.5)
      voltage = $1/(4*3.141*sigma_e*sqrt((zspacing)^2+(0.5*CBPspacing)^2+(0.5*CBPspacing)^2))
      input_cone[k][m].amp= (voltage / rm) *10^9
      input_cone[k][m].ssI= 0
      input_cone[k][m].del = stim_init
      input_cone[k][m].ton = 1500       //6000
	}
   }

} // end proc


  printf("\n")

  access rod_bip[0][0].soma

printf ("%d Bipolar cells created\n",nrodbipx*nrodbipy)
printf ("%d A2 Amacrine cells created\n",A2total)
printf ("%d Ganglion cells created\n",gantotal)